PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'Monkey ID Here'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = SRT Testing
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Experiment:
        circleXYS = []
        circleColor = []
        currentItem = []
        timeout = False
      Begin Routine:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            continueRoutine = False

        #Hide mouse on screen
        event.Mouse(visible = False)

        timer = core.Clock()
        if Item == [0]:
            circleXYS = [-.5, 0]
            currentItem = [0]
            #blue
            circleColor = [-1.0000, -1.0000, 1.0000]
        elif Item == [1]:
            circleXYS = [.5, 0]
            currentItem = [1]
            #red
            circleColor = [1.0000, -1.0000, -1.0000]
      Each Frame:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            continueRoutine = False

        if timer.getTime() >= 5:
            continueRoutine = False
            timeout = True
      End Routine:
        numTrials += 1
    MouseComponent trialMouse
      clickable = circleStim
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent leftOutline
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth [set every repeat] = 10
      pos = (-.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent rightOutline
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth [set every repeat] = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent circleStim
      fillColor [set every repeat] = $circleColor
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = circleXYS
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine startScreen
    CodeComponent rewardTrialsGenerator
      Code Type = Auto->JS
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      Before Experiment:
        import random

        rewardTrials = []
        i = 0
        while i < 100:
            numb = random.randint(18, 22)
            rewardTrials.append(numb)
            i += 1
        print(rewardTrials)

        # Preset end code (press 'e' to go to end screen)
        key_pressed = False
      Begin Experiment:
        #Import code for turning mouse off
        from psychopy import core

        #Timer for experiment
        myClock = core.Clock()
      Begin Routine:
        #Hide mouse on screen
        event.Mouse(visible = False)
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        SRT task

        Please tap the screen to check that the touch screen is working.
    MouseComponent startScreenMouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine loadStims
  Routine ITI
    CodeComponent ITICode
      Code Type = Auto->JS
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      Begin Experiment:
        responseSound = ""
      Begin Routine:
        ITIduration = .5

        #Hide mouse on screen
        event.Mouse(visible = False)

        if timeout == True:
            continueRoutine = False

        if ITIloop.thisN == 0:
            soundVolume = 1
        else:
            soundVolume = 0

        if Item == [0]:
            responseSound = "A"
        elif Item == [1]:
            responseSound = "F"
      End Routine:
        if len(ITImouse.clicked_name) == 0:
            ITIloop.finished = True
    PolygonComponent ITIbackground
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITIduration
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    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITIduration
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    PolygonComponent leftOutline_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 10
      pos = (-.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITIduration
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    PolygonComponent rightOutline_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITIduration
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    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $responseSound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      volume [set every repeat] = soundVolume
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    MouseComponent ITImouse
      clickable = ITIbackground, fixation
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITIduration
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  Routine startBox
    CodeComponent startBoxCode
      Code Type = Auto->JS
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      Begin Experiment:
        numTrials = 0
      Begin Routine:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            continueRoutine = False

        #Hide mouse on screen
        event.Mouse(visible = False)
      Each Frame:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            continueRoutine = False
    PolygonComponent startBoxStim
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent startBoxMouse
      clickable = startBoxStim
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine continueBox
    CodeComponent continueBoxCode
      Code Type = Auto->JS
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      Begin Routine:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            continueRoutine = False

        #Hide mouse on screen
        event.Mouse(visible = False)

        if timeout == False:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            continueRoutine = False
    ImageComponent redScreen
      image = stimuli/solid-red-background.jpg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent timeOutSound
      saveStartStop = False
      sound = stimuli/Negative.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent box
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 5
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    MouseComponent continueMouse
      clickable = box
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 5
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  Routine rewardDelay
    CodeComponent rewardCode
      Code Type = Auto->JS
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      Begin Experiment:
        delayCounter = 0
        rewardDuration = 0
      Begin Routine:
        if numTrials >= rewardTrials[delayCounter]:
            numTrials = 0
            delayCounter = 0
            rewardDuration = 5
        else:
            continueRoutine = False
            rewardDuration = 0

        if timeout == True:
            continueRoutine = False
    ImageComponent rewardImage
      image = stimuli/GreenCorrectScreen.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardDuration
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    SoundComponent rewardSound
      saveStartStop = False
      sound = stimuli/Positive.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rewardDuration
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    SoundComponent endRewardSound
      saveStartStop = False
      sound = G
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
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  Routine endScreen
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Task finished!
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  Routine Question
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Did you notice a pattern in the Dots? If yes, please elaborate.
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    TextComponent endText
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Click here to submit your answer
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    MouseComponent endMouse
      clickable = endText
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine rewardDelay_2
  Routine trialRepeat
    CodeComponent repeatCode
      Code Type = Auto->JS
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      Begin Experiment:
        circleXYS = []
        circleColor = []
        newTimeout = False
        stimClicked = False
      Begin Routine:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            repeatLoop.finished = True
            continueRoutine = False

        #Hide mouse on screen
        event.Mouse(visible = False)

        if timeout == False:
            continueRoutine = False
            repeatLoop.finished = True

        repeatTimer = core.Clock()

        if currentItem == [0]:
            circleXYS = [-.5, 0]
            #blue
            circleColor = [-1.0000, -1.0000, 1.0000]
        elif currentItem == [1]:
            circleXYS = [.5, 0]
            #red
            circleColor = [1.0000, -1.0000, -1.0000]
      Each Frame:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            repeatLoop.finished = True
            continueRoutine = False

        if repeatTimer.getTime() >= 5:
            continueRoutine = False
            newTimeout = True

        else:
            repeatLoop.finished = True

        if repeatMouse.isPressedIn(repeatCircle):
            stimClicked = True
    MouseComponent repeatMouse
      clickable = circleStim
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent repeatLeft
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth [set every repeat] = 10
      pos = (-.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent repeatRight
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth [set every repeat] = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent repeatCircle
      fillColor [set every repeat] = $circleColor
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = circleXYS
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine repeatITI
    CodeComponent repeatITICode
      Code Type = Auto->JS
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      Begin Experiment:
        responseSound = ""
      Begin Routine:
        ITIduration = .5
        #Hide mouse on screen
        event.Mouse(visible = False)

        if timeout == False:
            continueRoutine = False

        if newTimeout == True:
            continueRoutine = False

        if currentItem == [0]:
            responseSound = "A"
        elif currentItem == [1]:
            responseSound = "F"
      End Routine:
        if stimClicked == True:
            timeout = False
        #    newTimeout = False
            repeatLoop.finished = True
        else:
            repeatLoop.finished = False
    PolygonComponent repeatFixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITIduration
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    PolygonComponent repeatLeft_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 10
      pos = (-.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITIduration
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    PolygonComponent repeatRight_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 10
      pos = (0.5, 0)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITIduration
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    SoundComponent repeatSound
      saveStartStop = False
      sound [set every repeat] = $responseSound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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  Routine repeatITI_2
  Routine repeatContinue
    CodeComponent continueBoxCode_2
      Code Type = Auto->JS
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      Begin Routine:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            repeatLoop.finished = True
            continueRoutine = False

        #Hide mouse on screen
        event.Mouse(visible = False)

        if timeout == False:
            continueRoutine = False

        if newTimeout == False:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'e' in keys:
            key_pressed = True
        if key_pressed == True:
            continueRoutine = False

        #Experiment ends after 4 hours
        if myClock.getTime() > 14400:
            trials.finished = True
            repeatLoop.finished = True
            continueRoutine = False
      End Routine:
        newTimeout = False
        timeout = False
    MouseComponent continueMouse_2
      clickable = box
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 5
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    PolygonComponent box_2
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 5
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    SoundComponent timeOutSound_2
      saveStartStop = False
      sound = stimuli/Negative.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent repeat_2
      image = stimuli/solid-red-background.jpg
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine startScreen
  Routine startBox
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/dotOrder.csv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 1)]),
      OrderedDict([('Item', 0)])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
    Routine trial
    LoopInitiator ITIloop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10000
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      Routine ITI
    LoopTerminator ITIloop
    Routine rewardDelay
    Routine continueBox
    LoopInitiator repeatLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 10000
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      Routine trialRepeat
      Routine repeatITI
      Routine repeatContinue
    LoopTerminator repeatLoop
  LoopTerminator trials
  Routine endScreen
